{
  "$id": "dvrk-system.schema.json",
  "$version": "1",
  "component_manager": {
    "components": [
      {
        "shared-library": "sawOpenXR",
        "class-name": "mtsOpenXR",
        "constructor-arg": {
          "Name": "OpenXR"
        },
        "configure-parameter": "sawOpenXR-pybullet-dual-console.json"
      },
      {
        "shared-library": "dvrk_arm_from_ros",
        "class-name": "dvrk_psm_from_ros",
        "constructor-arg": {
          "Name": "PSM1",
          "Period": 0.01
        }
      },
      {
        "shared-library": "dvrk_arm_from_ros",
        "class-name": "dvrk_psm_from_ros",
        "constructor-arg": {
          "Name": "PSM2",
          "Period": 0.01
        }
      },
      {
        "shared-library": "dvrk_arm_from_ros",
        "class-name": "dvrk_psm_from_ros",
        "constructor-arg": {
          "Name": "PSM3",
          "Period": 0.01
        }
      },
      {
        "shared-library": "dvrk_arm_from_ros",
        "class-name": "dvrk_arm_from_ros",
        "constructor-arg": {
          "Name": "ECM",
          "Period": 0.01
        }
      }
    ]
  },
  "IOs": [
    {
      "name": "IO",
      "port": "udpfw",
      "watchdog_timeout": 0.1,
      "protocol": "srbw"
    }
  ],
  "arms": [
    {
      "name": "MTML",
      "type": "MTM",
      "serial": "22723",
      "IO": "IO",
      "base_frame": {
        "reference_frame": "HRSV",
        "transform": [
          [-1.0, 0.0, 0.0, 0.180],
          [0.0, 0.866025404, 0.5, 0.400],
          [0.0, 0.5, -0.866025404, 0.475],
          [0.0, 0.0, 0.0, 1.0]
        ]
      }
    },
    {
      "name": "MTMR",
      "type": "MTM",
      "serial": "22403",
      "IO": "IO",
      "base_frame": {
        "reference_frame": "HRSV",
        "transform": [
          [-1.0, 0.0, 0.0, -0.180],
          [0.0, 0.866025404, 0.5, 0.400],
          [0.0, 0.5, -0.866025404, 0.475],
          [0.0, 0.0, 0.0, 1.0]
        ]
      }
    },
    {
      "name": "Meta_MTML",
      "type": "MTM_GENERIC",
      "component": "OpenXR",
      "interface": "MTML"
    },
    {
      "name": "Meta_MTMR",
      "type": "MTM_GENERIC",
      "component": "OpenXR",
      "interface": "MTMR"
    },
    {
      "name": "PSM1",
      "type": "PSM_GENERIC",
      "component": "PSM1",
      "interface": "PSM1",
      "skip_ROS_bridge": true
    },
    {
      "name": "PSM2",
      "type": "PSM_GENERIC",
      "component": "PSM2",
      "interface": "PSM2",
      "skip_ROS_bridge": true
    },
    {
      "name": "PSM3",
      "type": "PSM_GENERIC",
      "component": "PSM3",
      "interface": "PSM3",
      "skip_ROS_bridge": true
    },
    {
      "name": "ECM",
      "type": "ECM_GENERIC",
      "component": "ECM",
      "interface": "ECM",
      "skip_ROS_bridge": true
    }
  ],
  "consoles": [
    {
      "name": "console",
      "input_type": "PEDALS_GOOVIS_HEAD_SENSOR",
      "IO_pedals": {
        "IO": "IO",
        "IO_file": "io/sawRobotIO1394-MTMR-foot-pedals-QLA1.json"
      },
      "HID_file": "hid/goovis-hd.json",
      "teleop_PSMs": [
        {"MTM": "MTMR", "PSM": "PSM1"},
        {"MTM": "MTML", "PSM": "PSM2"},
        {"MTM": "MTML", "PSM": "PSM3"}
      ],
      "teleop_ECMs": [
        {"MTML": "MTML", "MTMR": "MTMR", "ECM": "ECM"}
      ]
    },
    {
      "name": "Meta",
      "input_type": "COMPONENTS",
      "operator_present": {
        "component": "OpenXR",
        "interface": "Console/operator_present"
      },
      "clutch": {
        "component": "OpenXR",
        "interface": "Console/clutch"
      },
      "camera": {
        "component": "OpenXR",
        "interface": "Console/camera"
      },
      "teleop_PSMs": [
        {
          "MTM": "Meta_MTMR",
          "PSM": "PSM1",
          "clutch": {
            "component": "OpenXR",
            "interface": "Console/clutch/MTMR"
          },
          "configure_parameter": {
            "MTM_is_haptic": false,
            "align_MTM": false,
            "use_MTM_linear_velocity": false,
            "use_MTM_angular_velocity": false,
            "ignore_jaw": false,
            "start_gripper_threshold": 0.0,
            "gripper_scaling": {
              "zero": 0.3490658504,
              "max": 1.7453292520
            },
            "scale": 0.3
          }
        },
        {
          "MTM": "Meta_MTML",
          "PSM": "PSM2",
          "clutch": {
            "component": "OpenXR",
            "interface": "Console/clutch/MTML"
          },
          "configure_parameter": {
            "MTM_is_haptic": false,
            "align_MTM": false,
            "use_MTM_linear_velocity": false,
            "use_MTM_angular_velocity": false,
            "ignore_jaw": false,
            "start_gripper_threshold": 0.0,
            "gripper_scaling": {
              "zero": 0.3490658504,
              "max": 1.7453292520
            },
            "scale": 0.3
          }
        },
        {
          "MTM": "Meta_MTML",
          "PSM": "PSM3",
          "clutch": {
            "component": "OpenXR",
            "interface": "Console/clutch/MTML"
          },
          "configure_parameter": {
            "MTM_is_haptic": false,
            "align_MTM": false,
            "use_MTM_linear_velocity": false,
            "use_MTM_angular_velocity": false,
            "ignore_jaw": false,
            "start_gripper_threshold": 0.0,
            "gripper_scaling": {
              "zero": 0.3490658504,
              "max": 1.7453292520
            },
            "scale": 0.3
          }
        }
      ],
      "teleop_ECMs": [
        {
          "MTML": "Meta_MTML",
          "MTMR": "Meta_MTMR",
          "ECM": "ECM",
          "configure_parameter": {
            "MTM_is_haptic": false,
            "check_MTMs_workspace": false,
            "haptic_feedback_ratio": 0.0
          }
        }
      ]
    }
  ]
}
