/* -*- Mode: Javascript; tab-width: 4; -*- */
{
  "$id": "dvrk-system.schema.json",
  "$version": "1",
  "component_manager": {
    "components": [
      { "shared-library": "dvrk_arm_from_ros", "class-name": "dvrk_psm_from_ros", "constructor-arg": { "Name": "PSM1", "Period": 0.01 } },
      { "shared-library": "dvrk_arm_from_ros", "class-name": "dvrk_psm_from_ros", "constructor-arg": { "Name": "PSM2", "Period": 0.01 } },
      { "shared-library": "dvrk_arm_from_ros", "class-name": "dvrk_psm_from_ros", "constructor-arg": { "Name": "PSM3", "Period": 0.01 } },
      { "shared-library": "dvrk_arm_from_ros", "class-name": "dvrk_arm_from_ros", "constructor-arg": { "Name": "ECM", "Period": 0.01 } }
    ]
  },
  "IOs": [
    { "name": "IO", "port": "udpfw", "protocol": "srbw", "watchdog_timeout": 0.1 }
  ],
  "arms": [
    {
      "name": "MTML", "type": "MTM", "serial": "22723", "IO": "IO",
      "base_frame": { "reference_frame": "HRSV", "transform": [[-1.0, 0.0, 0.0, 0.180], [0.0, 0.866025404, 0.5, 0.400], [0.0, 0.5, -0.866025404, 0.475], [0.0, 0.0, 0.0, 1.0]] }
    },
    {
      "name": "MTMR", "type": "MTM", "serial": "22403", "IO": "IO",
      "base_frame": { "reference_frame": "HRSV", "transform": [[-1.0, 0.0, 0.0, -0.180], [0.0, 0.866025404, 0.5, 0.400], [0.0, 0.5, -0.866025404, 0.475], [0.0, 0.0, 0.0, 1.0]] }
    },
    { "name": "PSM1", "type": "PSM_GENERIC", "component": "PSM1", "interface": "PSM1", "skip_ROS_bridge": true },
    { "name": "PSM2", "type": "PSM_GENERIC", "component": "PSM2", "interface": "PSM2", "skip_ROS_bridge": true },
    { "name": "PSM3", "type": "PSM_GENERIC", "component": "PSM3", "interface": "PSM3", "skip_ROS_bridge": true },
    { "name": "ECM", "type": "ECM_GENERIC", "component": "ECM", "interface": "ECM", "skip_ROS_bridge": true }
  ],
  "consoles": [
    {
      "name": "console",
      "input_type": "PEDALS_GOOVIS_HEAD_SENSOR",
      "IO_pedals": { "IO": "IO", "IO_file": "io/sawRobotIO1394-MTMR-foot-pedals-QLA1.json" },
      "HID_file": "hid/goovis-hd.json",
      "teleop_PSMs": [
        { "MTM": "MTMR", "PSM": "PSM1" },
        { "MTM": "MTML", "PSM": "PSM2" },
        { "MTM": "MTML", "PSM": "PSM3" }
      ],
      "teleop_ECMs": [
        { "MTML": "MTML", "MTMR": "MTMR", "ECM": "ECM" }
      ]
    }
  ]
}
